# Generated by Configurator on Thu Jun 23 14:21:05 CDT 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM7,SerialManager,COM7
Device,OScHub,OpenScan,OScHub
Device,OSc-LSM,OpenScan,OSc-LSM
Device,OSc-Magnifier,OpenScan,OSc-Magnifier
Device,NIMultiAnalogDev1,NIMultiAnalog,NIMultiAnalogOutHub
Device,LED-Dev1ao0,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao0
Device,PockelsCell-Dev1ao1,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao1
Device,Shutters-DigitalIODev1,NI100X,DigitalIO
Device,UniblitzShutter,Utilities,State Device Shutter
Device,WhiteLED,Utilities,DA Shutter
Device,QCamera,QCam,QCamera
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,ZStage:Z:32,ASITiger,ZStage:Z:32
Device,ZStage:F:32,ASITiger,ZStage:F:32
Device,Turret:O:35,ASITiger,Turret:O:35
Device,DCC100,DCC100,DCC100

# Pre-init settings for devices
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,115200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,OSc-LSM,Clock,OpenScan-NIDAQ-at-PXI2Slot2
Property,OSc-LSM,Detector,OpenScan-NIDAQ-at-PXI2Slot2
Property,OSc-LSM,Scanner,OpenScan-NIDAQ-at-PXI2Slot2
Property,NIMultiAnalogDev1,Device,Dev1
Property,NIMultiAnalogDev1,MaxSequenceLength,1024
Property,LED-Dev1ao0,MaxVolts,5.0000
Property,LED-Dev1ao0,MinVolts,0.0000
Property,LED-Dev1ao0,Sequencing,Use hub setting
Property,PockelsCell-Dev1ao1,MaxVolts,1.0000
Property,PockelsCell-Dev1ao1,MinVolts,0.0000
Property,PockelsCell-Dev1ao1,Sequencing,Use hub setting
Property,Shutters-DigitalIODev1,AutoDetectedOutputPort,Use Custom
Property,Shutters-DigitalIODev1,IOChannel,Dev1/port0/line1:0
Property,Shutters-DigitalIODev1,TriggerSequenceLength,1000
Property,QCamera,Camera,1077 QICam B S/N 32-0091B-241
Property,TigerCommHub,Port,COM7

# Pre-init settings for COM ports

# Hub (parent) references
Parent,OSc-LSM,OScHub
Parent,OSc-Magnifier,OScHub
Parent,LED-Dev1ao0,NIMultiAnalogDev1
Parent,PockelsCell-Dev1ao1,NIMultiAnalogDev1
Parent,XYStage:XY:31,TigerCommHub
Parent,ZStage:Z:32,TigerCommHub
Parent,ZStage:F:32,TigerCommHub
Parent,Turret:O:35,TigerCommHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,UniblitzShutter,40.0

# Focus directions
FocusDirection,ZStage:Z:32,0
FocusDirection,ZStage:F:32,0

# Roles
Property,Core,Camera,OSc-LSM
Property,Core,Focus,ZStage:Z:32
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Shutters-DigitalIODev1
Label,Shutters-DigitalIODev1,3,3
Label,Shutters-DigitalIODev1,2,2
Label,Shutters-DigitalIODev1,1,1
Label,Shutters-DigitalIODev1,0,0
# Turret:O:35
Label,Turret:O:35,1,Position-2
Label,Turret:O:35,0,Position-1

# Configuration presets
# Group: color
# Preset: ON
ConfigGroup,color,ON,QCamera,Color,ON

# Preset: OFF
ConfigGroup,color,OFF,QCamera,Color,OFF


# Group: Imaging
# Preset: Camera
ConfigGroup,Imaging,Camera,Shutters-DigitalIODev1,State,0
ConfigGroup,Imaging,Camera,Core,Camera,QCamera
ConfigGroup,Imaging,Camera,Core,Shutter,WhiteLED
ConfigGroup,Imaging,Camera,QCamera,Color,ON

# Preset: LSM
ConfigGroup,Imaging,LSM,Shutters-DigitalIODev1,State,3
ConfigGroup,Imaging,LSM,Core,Camera,OSc-LSM
ConfigGroup,Imaging,LSM,Core,Shutter,UniblitzShutter
ConfigGroup,Imaging,LSM,QCamera,Color,OFF


# Group: res
# Preset: 512
ConfigGroup,res,512,OSc-LSM,LSM-Resolution,512

# Preset: 2048
ConfigGroup,res,2048,OSc-LSM,LSM-Resolution,2048

# Preset: 256
ConfigGroup,res,256,OSc-LSM,LSM-Resolution,256

# Preset: 1024
ConfigGroup,res,1024,OSc-LSM,LSM-Resolution,1024


# Group: PockelsCell
# Preset: NewPreset
ConfigGroup,PockelsCell,NewPreset,PockelsCell-Dev1ao1,Voltage,0.0000


# Group: camera
# Preset: QCamera
ConfigGroup,camera,QCamera,Core,Camera,QCamera

# Preset: OSc-LSM
ConfigGroup,camera,OSc-LSM,Core,Camera,OSc-LSM


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,LED-Dev1ao0,Voltage,0.0000
ConfigGroup,System,Startup,Shutters-DigitalIODev1,ClosedPosition,0
ConfigGroup,System,Startup,Shutters-DigitalIODev1,Sequenceable,0
ConfigGroup,System,Startup,Shutters-DigitalIODev1,State,0
ConfigGroup,System,Startup,UniblitzShutter,State Device,Shutters-DigitalIODev1
ConfigGroup,System,Startup,WhiteLED,DA Device,LED-Dev1ao0

# Preset: Shutdown
ConfigGroup,System,Shutdown,Shutters-DigitalIODev1,ClosedPosition,0
ConfigGroup,System,Shutdown,Shutters-DigitalIODev1,Sequenceable,0
ConfigGroup,System,Shutdown,UniblitzShutter,State Device,Shutters-DigitalIODev1
ConfigGroup,System,Shutdown,WhiteLED,DA Device,LED-Dev1ao0
ConfigGroup,System,Shutdown,LED-Dev1ao0,Voltage,0.0000
ConfigGroup,System,Shutdown,Shutters-DigitalIODev1,State,0


# Group: pixelFreq
# Preset: 1250000.0000
ConfigGroup,pixelFreq,1250000.0000,OSc-LSM,LSM-PixelRateHz,1250000.0000

# Preset: 400000.0000
ConfigGroup,pixelFreq,400000.0000,OSc-LSM,LSM-PixelRateHz,400000.0000

# Preset: 200000.0000
ConfigGroup,pixelFreq,200000.0000,OSc-LSM,LSM-PixelRateHz,200000.0000

# Preset: 1000000.0000
ConfigGroup,pixelFreq,1000000.0000,OSc-LSM,LSM-PixelRateHz,1000000.0000

# Preset: 625000.0000
ConfigGroup,pixelFreq,625000.0000,OSc-LSM,LSM-PixelRateHz,625000.0000

# Preset: 250000.0000
ConfigGroup,pixelFreq,250000.0000,OSc-LSM,LSM-PixelRateHz,250000.0000

# Preset: 100000.0000
ConfigGroup,pixelFreq,100000.0000,OSc-LSM,LSM-PixelRateHz,100000.0000

# Preset: 50000.0000
ConfigGroup,pixelFreq,50000.0000,OSc-LSM,LSM-PixelRateHz,50000.0000

# Preset: 500000.0000
ConfigGroup,pixelFreq,500000.0000,OSc-LSM,LSM-PixelRateHz,500000.0000

# Preset: 125000.0000
ConfigGroup,pixelFreq,125000.0000,OSc-LSM,LSM-PixelRateHz,125000.0000



# PixelSize settings
# Resolution preset: 4x
ConfigPixelSize,4x,Turret:O:35,Label,Position-2
PixelSize_um,4x,1.105
PixelSizeAffine,4x,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: 20x
ConfigPixelSize,20x,Turret:O:35,Label,Position-1
PixelSize_um,20x,0.222
PixelSizeAffine,20x,0.222,0.0,0.0,0.0,0.222,0.0

